CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Put images from SH-SY5Y folder.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Drug', 'ERK': 'Drug'}, {'DNA': 'Conc', 'ERK': 'Conc'}, {'DNA': 'Rep', 'ERK': 'Rep'}, {'DNA': 'Field', 'ERK': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:ERK
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:DNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Converts Hoechst stained nuclei (blue) to gray scale image.']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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:DNAGray
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
ColorToGray:[module_num:6|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notes:['Converts ERK-KTR mClover signal (green) to gray scale image.']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
    Select the input image:ERK
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:ERKGray
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identifies nuclei.']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
    Select the input image:DNAGray
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.08,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayOutlines:[module_num:8|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notes:['Highlights identified nuclei by red lines. This step is not necessary, only to check right nuclei segmentation.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNAGray
    Name the output image:NucleiSeg
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

SaveImages:[module_num:9|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notes:['Saves images with highlighted nuclei to "Nuclei_test" folder. This step is not necessary, only to check right nuclei segmentation.']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
    Select the type of image to save:Image
    Select the image to save:NucleiSeg
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Nuclei_
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Nuclei_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifySecondaryObjects:[module_num:10|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notes:['Identifies cells using cell nuclei as seeds.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ERKGray
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:11|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notes:['Subtracts nuclei from cells to create cytoplasm.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:12|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notes:['Measures ERK-KTR mClover (green) intensity in nuclei and cytoplasm.']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
    Select images to measure:ERKGray
    Select objects to measure:Cytoplasm, Nuclei

CalculateMath:[module_num:13|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notes:['Calculates ratio between median signal in cytoplasm and nucleus.']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
    Name the output measurement:RatioMedian
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:Cytoplasm
    Select the first operand measurement:Intensity_MedianIntensity_ERKGray
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei
    Select the second operand measurement:Intensity_MedianIntensity_ERKGray
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:14|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notes:['Highlights identified nuclei by blue and cells by green lines. This step is not necessary, only to check right cell identification and segmentation.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERKGray
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Cells

DisplayDataOnImage:[module_num:15|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notes:['Adds nuclei numbers to the image. This step is not necessary, can be used later to check valid ERK-KTR ratios.']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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:16|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notes:['Saves images with highlighted nuclei and cells  to "Output" folder. This step is not necessary, only to check right nuclei and cell segmentation. ']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['Saves results to csv file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Math_RatioMedian
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SH-SY5Y_
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:KTR.csv
    Use the object name for the file name?:No
